PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1090, 800)
  expName = untitled_FINAL_NEWEST
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if show_label==1:
            label_text.opacity==1
        else:
            label_text.opacity==0
    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if slider_emotion1.markerPos is not None:

            slider_emotion2.markerPos = 6 - slider_emotion1.markerPos

        elif slider_emotion2.markerPos is not None:
            slider_emotion1.markerPos = 6 - slider_emotion2.markerPos
    TextComponent label_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $label
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    ImageComponent stim_image
      image [set every repeat] = $image_path
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    SliderComponent slider_emotion1
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      initVal = 3
      labels = ('smutek','')
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (0.5, 0.1)
      startEstim = 2.0
      startVal [time (s)] = 2.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
      units = norm
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    SliderComponent slider_emotion2
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      initVal = 3
      labels = ('','radość')
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.1)
      startEstim = 2.0
      startVal [time (s)] = 2.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
      units = norm
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=True
      End Routine:
        win.mouseVisible=False
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/julia/OneDrive/Pulpit/percepcja_psychopy/conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\360_F_268212419_ZBJvlgVezhjziaP9aynnMGMLOvjUgNG5.jpg', 'label': 'Ten piesek jest smutny', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\dachshund-8910099_640.jpg', 'label': 'Ten piesek jest wesoły', 'show_label': 0},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'label': 'Ten piesek jest smutny', 'show_label': 0},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\images (1).jpg', 'label': 'Ten piesek jest smutny', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\images (2).jpg', 'label': 'Ten piesek jest wesoły', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\images (3).jpg', 'label': 'Ten piesek jest smutny', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\images (4).jpg', 'label': 'Ten piesek jest smutny', 'show_label': 0},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\images (5).jpg', 'label': 'Ten piesek jest wesoły', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\images (6).jpg', 'label': 'Ten piesek jest smutny', 'show_label': 1}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
    Routine trial
  LoopTerminator trials
